{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "Catphan_Analysis": {
            "filters": {}, 
            "params": {
                "classifier": "False",
                "version": "503",
                "hu_tolerance": "100",
                "add_boundary":"True"
            }
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Dennis Dickerscheid, ASZ", 
        "creator": " ", 
        "description": "Wrapperfile for the pylinac CatphanQC code", 
        "version": "20160413"
    }
}
